PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'isPractice': u'no', u'session': u'001', u'participant': u'', u'mriMode': u'off'}
  expName = context
  Units = use prefs
  Screen = 1
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Routines
  Routine feedback
  Routine instr
    CodeComponent initStuff
      Begin Experiment:
        win.setColor('black')
    CodeComponent instrCode
      Begin Experiment:
        instruction ='''Imagine that you are a health inspector trying to determine the cause of illness in different restaurants.''' \
        + ''' On each trial you will see the name of the restaurant and a particular food.''' \
        + ''' Your job is to predict whether a customer will get sick from eating the food.''' \
        + ''' The outcome may or may not depend on the particular restaurant the customer is in (you have to figure that out).''' \
        + ''' In some cases you will make predictions about the same food in different restaurants.

        The experiment consists of 9 rounds. In each round, you will be presented with a different set of restaurants and foods.''' \
        + ''' There will be a short pause between rounds.

        Press any button to begin the first round.
        '''
    TextComponent instrText
      wrapWidth = 1.5
      stopVal [duration (s)] = 60
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        $instruction
    KeyboardComponent startExpResp
      stopVal [time (s)] = 60
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0
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  Routine new_run
    CodeComponent runInstrCode
      Begin Experiment:
        # Put 'em here for good indentation
        #
        if expInfo['mriMode'] != 'off': # we're scanning!
            assert expInfo['mriMode'] == 'scan'
            sickPressInstr = "with your index finger"
            notsickPressInstr = "with your middle finger"
        else: # not scanning => behavioral
            sickPressInstr = "the left arrow key (<-)"
            notsickPressInstr = "the right arrow key (->)"

        runInstructionsRound1 = '''You will make 24 predictions. After each prediction (except the last 4), you will receive feedback about whether or not the customer got sick.

        Press %s if you believe the customer will get sick from eating the food.

        Press %s if you believe the customer will NOT get sick.

        You will have 3 seconds to press on each trial.

        Press any button to begin the first trial.''' % (sickPressInstr, notsickPressInstr)

        runInstructionsOtherRounds = '''You are about to begin a new round with a new set of restaurants and foods.

        Press any button to begin the first trial.'''
      Begin Routine:
        if runs.thisN == 0: # first round
            runInstr.setText(runInstructionsRound1)
        else: # other rounds
            runInstr.setText(runInstructionsOtherRounds)
    TextComponent runInstr
      wrapWidth = 1.5
      stopVal [duration (s)] = 60.0
      text = this value is set in the code depending on the run number
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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    CodeComponent getRestaurants
      Begin Routine:
        # Parse the comma-separated list of restaurant names
        #
        restaurants = [r.strip() for r in restaurantNames.split(',')]
        assert len(restaurants) == 3, "There should be 3 comma-separated restaurant names per run; found " + str(len(restaurants))

        # Use a separate, hardcoded set of restaurants and foods if it's just a practice run
        #
        if expInfo['isPractice'] == 'yes':
            restaurants = ['Seven Hills', 'Blue Bottle Cafe', 'Restaurant Gary Danko']
            foodFilesPrefix = 'practice_food'
    CodeComponent shuffleContextRoles
      Begin Routine:
        # Random shuffle the context roles so they're independent from the
        # restaurants / foods.
        #
        # Notice that we ONLY DO THIS ONCE at the beginning
        #
        try:
            assert contextRolesWereShuffled
        except NameError:
            # hack to make sure this happens only once
            # we can't put in Begin Experiment b/c runs is not initialized there
            #
            contextRoles = [run['contextRole'] for run in runs.trialList]
            print 'original contextRoles = ', contextRoles
            shuffle(contextRoles)
            print 'Shuffled context roles = ', contextRoles
            # set the flag so we don't run this code again
            #
            contextRolesWereShuffled = True

        # very important to set it here so
        # 1) it gets used to initialize the trial loop, and
        # 2) it gets written out to the data file
        #
        thisRun.contextRole = contextRoles[runs.thisN]
    CodeComponent shuffleFoodsAndRestaurants
      Begin Routine:
        # randomize foods & restaurants within each run
        # note that we DO THIS BEFORE EVERY RUN
        #
        cuesReshuffled = range(0, 3)
        contextsReshuffled = range(0, 3)

        shuffle(cuesReshuffled)
        shuffle(contextsReshuffled)

        print 'Shuffled cues: ', cuesReshuffled
        print 'Shuffled contexts: ', contextsReshuffled
    KeyboardComponent startRunResp
      stopVal [duration (s)] = 60
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0
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  Routine trial
    CodeComponent timeLoggingCode
      Begin Experiment:
        import time
        expInfo['expStartWallTime'] = time.ctime()
      Begin Routine:
        trials.addData('trialStartWallTime', time.ctime())
      End Routine:
        trials.addData('trialEndWallTime', time.ctime())
    CodeComponent showFeedback
      Each Frame:
        # show user some feedback
        #
        if t >= 3 + itiTime + feedbackFixationTime and not isFeedbackShown: # TODO don't hardcode
            isFeedbackShown = True
            if not responseKey.keys: # no response was made
                timeoutText.setOpacity(1)
                timeoutText.setText(timeoutText.text)
            else: # response was made
                if responseKey.corr == 1:
                    correctText.setOpacity(1)
                    wrongText.setOpacity(0)
                elif responseKey.corr == 0:
                    correctText.setOpacity(0)
                    wrongText.setOpacity(1)
                else:
                    print responseKey.corr
                    assert False, "responseKey.corr = 0 or 1"

                if sick == 'Yes':
                    gotSickText.setOpacity(1)
                    didntGetSickText.setOpacity(0)
                elif sick == 'No':
                    gotSickText.setOpacity(0)
                    didntGetSickText.setOpacity(1)
                else:
                    print sick
                    assert False, "sick can only be Yes or No"

                # hack to redraw the texts with new opacity
                correctText.setText(correctText.text)
                wrongText.setText(wrongText.text)
                gotSickText.setText(gotSickText.text)
                didntGetSickText.setText(didntGetSickText.text)
      Begin Routine:
        # clear the feedback
        isFeedbackShown = False
        correctText.setOpacity(0)
        wrongText.setOpacity(0)
        timeoutText.setOpacity(0)
        gotSickText.setOpacity(0)
        didntGetSickText.setOpacity(0)
        # hack to re-render the texts with new opacity
        correctText.setText(correctText.text)
        wrongText.setText(wrongText.text)
        timeoutText.setText(timeoutText.text)
        gotSickText.setText(gotSickText.text)
        didntGetSickText.setText(didntGetSickText.text)
    CodeComponent highlightChoice
      Each Frame:
        # highlight subject's response
        #
        if responseKey.keys:
            if responseKey.keys == 'left': # sick
                sickHighlight.opacity = 1
                notsickHighlight.opacity = 0
            elif responseKey.keys == 'right': # not sick
                sickHighlight.opacity = 0
                notsickHighlight.opacity = 1
            else:
                assert False, 'Can only have one response, left or right'
        # hack to re-render the text with new opacity
        sickHighlight.setText(sickHighlight.text)
        notsickHighlight.setText(notsickHighlight.text)
      Begin Routine:
        # don't highlight anything initially
        #
        sickHighlight.setOpacity(0)
        notsickHighlight.setOpacity(0)
        # hack to re-render the text with new opacity
        sickHighlight.setText(sickHighlight.text)
        notsickHighlight.setText(notsickHighlight.text)
    CodeComponent jitterCode
      Begin Experiment:
        # different jitter distributions depending on mode
        #
        if expInfo['mriMode'] != 'off': # we're scanning
            itiMean = 3
            itiLambda = 1.5
            itiMin = 1
            itiMax = 8

            feedbackFixationMean = 3
            feedbackFixationLambda = 1.5
            feedbackFixationMin = 1
            feedbackFixationMax = 8
        else: # behavioral
            itiMean = 1
            itiLambda = 0.5
            itiMin = 0.5
            itiMax = 3

            feedbackFixationMean = 1
            feedbackFixationLambda = 0.5
            feedbackFixationMin = 0.5
            feedbackFixationMax = 3
      Begin Routine:
        itiTime = np.random.laplace(itiMean, itiLambda)
        itiTime = max(itiTime, itiMin)
        itiTime = min(itiTime, itiMax)

        feedbackFixationTime = np.random.laplace(feedbackFixationMean, feedbackFixationLambda)
        feedbackFixationTime = max(feedbackFixationTime, feedbackFixationMin)
        feedbackFixationTime = min(feedbackFixationTime, feedbackFixationMax)

        print itiTime
        print feedbackFixationTime
    CodeComponent saveToStreamingFile
      Begin Experiment:
        # psychopy only writes the data at the very end
        # we want data with intermediate results
        # so we have this
        #

        streamingFilename = thisExp.dataFileName + '.wtf'
        streamingFile = open(streamingFilename, 'a')
        streamingDelim = ','

        # get names of data columns
        #
        def getExpDataNames():
            names = thisExp._getAllParamNames()
            names.extend(thisExp.dataNames)
            # names from the extraInfo dictionary
            names.extend(thisExp._getExtraInfo()[0])
            return names

        # write a header lines
        #
        def writeHeadersToStreamingFile():
            for heading in getExpDataNames():
                streamingFile.write(u'%s%s' % (heading, streamingDelim))
            streamingFile.write('\n')
            streamingFile.flush()

        def flushEntryToStreamingFile(entry):
            for name in getExpDataNames():
                entry.keys()
                if name in entry.keys():
                    ename = unicode(entry[name])
                    if ',' in ename or '\n' in ename:
                        fmt = u'"%s"%s'
                    else:
                        fmt = u'%s%s'
                    streamingFile.write(fmt % (entry[name], streamingDelim))
                else:
                    streamingFile.write(streamingDelim)
            streamingFile.write('\n')
            streamingFile.flush()

        nextEntryToFlush = 0

        # write last entry
        #
        def flushToStreamingFile():
            global nextEntryToFlush

            # don't write anything during the initial run
            # that's b/c the number of columns can change
            #
            if runs.thisN == 0:
                return

            # if we're after the initial run, flush everything
            # that we haven't flushed yet
            #
            while nextEntryToFlush < len(thisExp.entries):
                flushEntryToStreamingFile(thisExp.entries[nextEntryToFlush])
                nextEntryToFlush += 1
      End Routine:
        flushToStreamingFile()
      End Experiment:
        streamingFile.close()
    CodeComponent logCueAndContext
      Begin Experiment:
        def addExtraData():
            thisExp.addData('fmriTime', fmriClock.getTime())
            thisExp.addData('contextsReshuffled', ','.join([str(x) for x in contextsReshuffled]))
            thisExp.addData('contextId', contextId)
            thisExp.addData('restaurant', restaurants[contextsReshuffled[contextId]])
            thisExp.addData('cuesReshuffled', ','.join([str(x) for x in cuesReshuffled]))
            thisExp.addData('cueId', cueId)
            thisExp.addData('food', foodFilesPrefix + str(cuesReshuffled[cueId]))
      Begin Routine:
        thisExp.addData('trialOrTest', 'trial')
        addExtraData()
    CodeComponent sanityChecks
      Begin Routine:
        assert contextRolesWereShuffled
    TextComponent fixationITIText
      stopVal [duration (s)] = $itiTime
      durationEstim = 3
      text = +
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent trialInstrText
      wrapWidth = 20
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startEstim = 3
      text = Predict whether the customer will get sick from this food.
      startVal [time (s)] = $itiTime
      letterHeight = 0.075
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    TextComponent restaurantText
      color = pink
      stopVal [duration (s)] = 3
      pos = [0, +0.35]
      startEstim = 3
      text [set every repeat] = $restaurants[$contextsReshuffled[$contextId]]
      startVal [time (s)] = $itiTime
      font = Arial Bold
      letterHeight = 0.1
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    ImageComponent foodImg
      stopVal [duration (s)] = 3
      pos = [0, 0.0]
      startEstim = 3
      startVal [time (s)] = $itiTime
      image [set every repeat] = os.path.join('foods', $foodFilesPrefix + str($cuesReshuffled[$cueId]) + '.png')
      size = [0.5, 0.5]
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    ImageComponent sickImg
      stopVal [duration (s)] = 3
      pos = [-0.5, -0.6]
      startEstim = 3
      startVal [time (s)] = $itiTime
      image = $os.path.join('images', 'sick.png')
      size = [0.3, 0.45]
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    ImageComponent notsickImg
      stopVal [duration (s)] = 3
      pos = [+0.5, -0.6]
      startEstim = 3
      startVal [time (s)] = $itiTime
      image = $os.path.join('images', 'smiley.png')
      size = [0.3, 0.45]
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    KeyboardComponent responseKey
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = False
      startEstim = 3
      allowedKeys = 'left','right'
      startVal [time (s)] = $itiTime
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    StaticComponent ITI
      stopVal [duration (s)] = $itiTime
      durationEstim = 3
      startVal [time (s)] = 0
    TextComponent sickHighlight
      stopVal [duration (s)] = 3
      pos = [-0.5, -0.35]
      startEstim = 3
      text = _
      startVal [time (s)] = $itiTime
      letterHeight = 1.0
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    TextComponent notsickHighlight
      stopVal [duration (s)] = 3
      pos = [0.5, -0.35]
      startEstim = 3
      text = _
      startVal [time (s)] = $itiTime
      letterHeight = 1
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    TextComponent fixationFeedbackText
      text = +
      stopVal [duration (s)] = $feedbackFixationTime
      durationEstim = 3
      startEstim = 6
      startVal [time (s)] = $itiTime + 3
      letterHeight = 0.1
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    TextComponent correctText
      color = blue
      stopVal [duration (s)] = 1.0
      startEstim = 9
      text = CORRECT
      startVal [time (s)] = $itiTime + 3 + feedbackFixationTime
      font = Arial Bold
      letterHeight = 0.2
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    TextComponent wrongText
      color = red
      stopVal [duration (s)] = 1.0
      startEstim = 9
      text = WRONG
      startVal [time (s)] = $itiTime + 3 + feedbackFixationTime
      font = Arial Bold
      letterHeight = 0.2
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    TextComponent timeoutText
      stopVal [duration (s)] = 1.0
      startEstim = 9
      text = TIMEOUT
      startVal [time (s)] = $itiTime + 3 + feedbackFixationTime
      font = Arial Bold
      letterHeight = 0.2
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    TextComponent gotSickText
      stopVal [duration (s)] = 1.0
      pos = [0, -0.3]
      startEstim = 9
      text = The customer got sick!
      startVal [time (s)] = $itiTime + 3 + feedbackFixationTime
      letterHeight = 0.075
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    TextComponent didntGetSickText
      stopVal [duration (s)] = 1.0
      pos = [0, -0.3]
      startEstim = 9
      text = The customer didn't get sick!
      startVal [time (s)] = $itiTime + 3 + feedbackFixationTime
      letterHeight = 0.075
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    StaticComponent FeedbackJitter
      stopVal [duration (s)] = $feedbackFixationTime
      durationEstim = 3
      startEstim = 6
      startVal [time (s)] = $itiTime + 3
  Routine test_2
    CodeComponent highlightChoice_2
      Each Frame:
        # highlight subject's response
        #
        if responseKey_2.keys:
            if responseKey_2.keys == 'left': # sick
                sickHighlight_2.opacity = 1
                notsickHighlight_2.opacity = 0
            elif responseKey_2.keys == 'right': # not sick
                sickHighlight_2.opacity = 0
                notsickHighlight_2.opacity = 1
            else:
                assert False, 'Can only have one response, left or right'
        # hack to re-render the text with new opacity
        sickHighlight_2.setText(sickHighlight_2.text)
        notsickHighlight_2.setText(notsickHighlight_2.text)
      Begin Routine:
        # don't highlight anything initially
        #
        sickHighlight_2.setOpacity(0)
        notsickHighlight_2.setOpacity(0)
        # hack to re-render the text with new opacity
        sickHighlight_2.setText(sickHighlight_2.text)
        notsickHighlight_2.setText(notsickHighlight_2.text)
    CodeComponent jitterCode_2
      Begin Routine:
        itiTime_2 = np.random.laplace(itiMean, itiLambda)
        itiTime_2 = max(itiTime_2, itiMin)
        itiTime_2 = min(itiTime_2, itiMax)

        print itiTime_2
    CodeComponent timeLoggingCode_2
      Begin Routine:
        trials.addData('trialStartWallTime', time.ctime())
      End Routine:
        trials.addData('trialEndWallTime', time.ctime())
    CodeComponent saveToStreamingFile_2
      End Routine:
        flushToStreamingFile()
    CodeComponent logCueAndContext_2
      Begin Routine:
        thisExp.addData('trialOrTest', 'test')
        addExtraData()
    StaticComponent ITI_2
      stopVal [duration (s)] = $itiTime_2
      durationEstim = 3
      startVal [time (s)] = 0
    TextComponent fixationJitterText_2
      stopVal [duration (s)] = $itiTime_2
      durationEstim = 3
      text = +
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent trialInstrText_2
      wrapWidth = 20
      stopVal [duration (s)] = 3.0
      pos = [0, 0.8]
      startEstim = 3
      text = Predict whether the customer will get sick from this food.
      startVal [time (s)] = $itiTime_2
      letterHeight = 0.075
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    TextComponent restaurantText_2
      color = pink
      stopVal [duration (s)] = 3.0
      pos = [0, +0.35]
      startEstim = 3
      text [set every repeat] = $restaurants[$contextsReshuffled[$contextId]]
      startVal [time (s)] = $itiTime_2
      font = Arial Bold
      letterHeight = 0.1
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    ImageComponent foodImg_2
      stopVal [duration (s)] = 3.0
      pos = [0, 0.0]
      startEstim = 3
      startVal [time (s)] = $itiTime_2
      image [set every repeat] = os.path.join('foods', $foodFilesPrefix + str($cuesReshuffled[$cueId]) + '.png')
      size = [0.5, 0.5]
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    KeyboardComponent responseKey_2
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = False
      startEstim = 3
      allowedKeys = 'left','right'
      startVal [time (s)] = $itiTime_2
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    ImageComponent sickImg_2
      stopVal [duration (s)] = 3.0
      pos = [-0.5, -0.6]
      startEstim = 3
      startVal [time (s)] = $itiTime_2
      image = $os.path.join('images', 'sick.png')
      size = [0.3, 0.45]
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    ImageComponent notsickImg_2
      stopVal [duration (s)] = 3
      pos = [+0.5, -0.6]
      startEstim = 3
      startVal [time (s)] = $itiTime_2
      image = $os.path.join('images', 'smiley.png')
      size = [0.3, 0.45]
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    TextComponent sickHighlight_2
      stopVal [duration (s)] = 3
      pos = [-0.5, -0.35]
      startEstim = 3
      text = _
      startVal [time (s)] = $itiTime_2
      letterHeight = 1.0
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    TextComponent notsickHighlight_2
      stopVal [duration (s)] = 3
      pos = [0.5, -0.35]
      startEstim = 3
      text = _
      startVal [time (s)] = $itiTime_2
      letterHeight = 1
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  Routine waitForTrigger
    CodeComponent waitForTriggerCode
      Begin Experiment:
        fmriClock = core.Clock() # clock for syncing with fMRI scanner
        # definitely log it!

        #trigger = 'parallel'
        trigger = 'usb'
        if trigger == 'parallel':
            from psychopy import parallel
        elif trigger == 'usb':
            from psychopy.hardware.emulator import launchScan

            # settings for launchScan:
            MR_settings = {
                'TR': 2.5, # duration (sec) per volume
                'volumes': 141, # number of whole-brain 3D volumes / frames
                'sync': 'equal', # character to use as the sync timing event; assumed to come at start of a volume
                'skip': 0, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
                }
      Begin Routine:
        if expInfo['mriMode'] != 'off': # or 'scan' !
            assert expInfo['mriMode'] == 'scan'

            if trigger == 'usb':
                vol = launchScan(win, MR_settings,
                      globalClock=fmriClock, # <-- how you know the time!
                      mode=expInfo['mriMode']) # <-- mode passed in
            elif trigger == 'parallel':
                parallel.setPortAddress(0x378)
                pin = 10; wait_msg = "Waiting for scanner..."
                pinStatus = parallel.readPin(pin)
                waitMsgStim = visual.TextStim(win, color='DarkGray', text=wait_msg)
                waitMsgStim.draw()
                win.flip()
                while True:
                    if pinStatus != parallel.readPin(pin) or len(event.getKeys('esc')):
                       break
                       # start exp when pin values change
                globalClock.reset()
                logging.defaultClock.reset()
                logging.exp('parallel trigger: start of scan')
                win.flip()  # blank the screen on first sync pulse received

        expInfo['triggerWallTime'] = time.ctime()
        core.wait(1)
      End Routine:
        routineTimer.reset()
  Routine test
  Routine waitForFinish
    CodeComponent finishCode
      Begin Experiment:
        EXP_DURATION = 352.5
      Each Frame:
        if logging.defaultClock.getTime() > EXP_DURATION:
            continueRoutine = False
            finishText.status = FINISHED
            finishText.setAutoDraw(False)
      End Routine:
        logging.exp("Experiment Finished")
      End Experiment:
        #win.saveMovieFrames('thumb.png')
    TextComponent finishText
      color = black
      text = Please wait for scanner to finish...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instr
  Routine waitForTrigger
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = runs.xlsx
    loopType = fullRandom
    nReps = 1
    Selected rows = range(1,10)
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    conditions:
      [{u'restaurantNames': u'Okay here\'s how this works. Each row is a different run -- a list of restaurant names + the prefix of the filenames of its corresponding foods. The list of restaurant names should be comma-separated and should contain exactly 3 restaurants (no unicode characters please -- stick to ASCII). For each food prefix, there should be 3 corresponding files in the \'foods\' directory in the format "[food prefix][cueId].png". For example, for the prefix "mexican_food", there should be files "mexican_food0.png", "mexican_food1.png" and "mexican_food2.png".  The third column is ran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,
      {u'restaurantNames': u"Molina's Cantina,Restaurante Arroyo,El Coyote Cafe", u'foodFilesPrefix': u'mexican_food', u'contextRole': u'irrelevant'},
      {u'restaurantNames': u'Le Parisien,Chez Toinette,Au Petit Sud Ouest', u'foodFilesPrefix': u'french_food', u'contextRole': u'modulatory'},
      {u'restaurantNames': u"Lau's Dim Sum Bar,Shanghai Dumpling King,Happy Lamb Hot Pot", u'foodFilesPrefix': u'chinese_food', u'contextRole': u'additive'}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
    Routine new_run
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $contextRole + '.xlsx'
      loopType = fullRandom
      nReps = 1
      Selected rows = range(1,5)
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      Routine trial
    LoopTerminator trials
    LoopInitiator test_trials loopType="TrialHandler"
      conditionsFile = $contextRole + '.xlsx'
      loopType = fullRandom
      nReps = 1
      Selected rows = range(6,10)
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      Routine test_2
    LoopTerminator test_trials
  LoopTerminator runs
  Routine waitForFinish
